<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
<Plugin Name="CellType">
   
   <CellType TypeId="0" TypeName="Medium"/>
   <CellType TypeId="1" TypeName="cell"/>
   <CellType TypeId="2" TypeName="selected"/>
</Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
<Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="cell">10.0</Energy>
   <Energy Type1="Medium" Type2="selected">10.0</Energy>
   <Energy Type1="cell" Type2="cell">18.0</Energy>
   <Energy Type1="cell" Type2="selected">18.0</Energy>
   <Energy Type1="selected" Type2="selected">18.0</Energy>
   <NeighborOrder>4</NeighborOrder>
</Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="51" y="51" z="0"/>
         <BoxMax x="204" y="204" z="1"/>
         <Gap>4</Gap>
         <Width>8</Width>
         <Types>cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
