<!--
BSD 3-Clause License

Copyright (c) 2022, Juliano Ferrari Gianlupi
All rights reserved.

Redistribution and use in source and binary forms, with or without
modification, are permitted provided that the following conditions are met:

1. Redistributions of source code must retain the above copyright notice, this
   list of conditions and the following disclaimer.

2. Redistributions in binary form must reproduce the above copyright notice,
   this list of conditions and the following disclaimer in the documentation
   and/or other materials provided with the distribution.

3. Neither the name of the copyright holder nor the names of its
   contributors may be used to endorse or promote products derived from
   this software without specific prior written permission.

THIS SOFTWARE IS PROVIDED BY THE COPYRIGHT HOLDERS AND CONTRIBUTORS "AS IS"
AND ANY EXPRESS OR IMPLIED WARRANTIES, INCLUDING, BUT NOT LIMITED TO, THE
IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A PARTICULAR PURPOSE ARE
DISCLAIMED. IN NO EVENT SHALL THE COPYRIGHT HOLDER OR CONTRIBUTORS BE LIABLE
FOR ANY DIRECT, INDIRECT, INCIDENTAL, SPECIAL, EXEMPLARY, OR CONSEQUENTIAL
DAMAGES (INCLUDING, BUT NOT LIMITED TO, PROCUREMENT OF SUBSTITUTE GOODS OR
SERVICES; LOSS OF USE, DATA, OR PROFITS; OR BUSINESS INTERRUPTION) HOWEVER
CAUSED AND ON ANY THEORY OF LIABILITY, WHETHER IN CONTRACT, STRICT LIABILITY,
OR TORT (INCLUDING NEGLIGENCE OR OTHERWISE) ARISING IN ANY WAY OUT OF THE USE
OF THIS SOFTWARE, EVEN IF ADVISED OF THE POSSIBILITY OF SUCH DAMAGE.
-->

<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>200</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="1024" y="1024" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
<Plugin Name="CellType">
   
   <CellType TypeId="0" TypeName="Medium"/>
   <CellType TypeId="1" TypeName="cell"/>
</Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
<Plugin Name="Contact">
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="cell">10.0</Energy>
   <Energy Type1="cell" Type2="cell">10.0</Energy>
   <NeighborOrder>4</NeighborOrder>
</Plugin>
   
 
</CompuCell3D>
